
s:Ma/Material_HU_0/BaseMaterial = "G4_WATER"
d:Ma/Material_HU_0/Density = 1.000000 g/cm3
s:Ge/Patient/Parent="World"
s:Ge/Patient/Type = "TsImageCube"
s:Ge/Patient/InputDirectory = "./"
s:Ge/Patient/InputFile = "matRad_cube.dat"
s:Ge/Patient/ImagingtoMaterialConverter = "MaterialTagNumber"
i:Ge/Patient/NumberOfVoxelsX = 15
i:Ge/Patient/NumberOfVoxelsY = 36
iv:Ge/Patient/NumberOfVoxelsZ = 1 15
d:Ge/Patient/VoxelSizeX       = 5.000 mm
d:Ge/Patient/VoxelSizeY       = 5.000 mm
dv:Ge/Patient/VoxelSizeZ       = 1 5.000 mm
s:Ge/Patient/DataType  = "SHORT"
iv:Ge/Patient/MaterialTagNumbers = 1 0
sv:Ge/Patient/MaterialNames = 1 "Material_HU_0"
